PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = piloto1
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Routines
  Routine grave
    SoundComponent Sonido
      sound [set every repeat] = $Hertz
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      volume [set every repeat] = $volumen
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    ImageComponent image_2
      image [set every repeat] = $Imagenes
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = ("0","1000","2000","3000","4000","5000")
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        nuestro_slider=[]
        image_slider=[]
      Begin JS Experiment:
        nuestro_slider = [];
        image_slider = [];
      End JS Routine:
        rating = slider_2.getRating();
        Imagenes1 = Imagenes;
        nuestro_slider.push(rating);
        image_slider.push(Imagenes1);
      End Routine:
        rating=slider_2.getRating()
        Imagenes1=Imagenes
        nuestro_slider.append(rating)
        image_slider.append(Imagenes1)
  Routine Instrucciones
    SoundComponent sound_3
      sound = instr.ogg
      startVal [time (s)] = 0.0
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  Routine Pago2
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        var mensaje_precio_sujeto, n_precio_sujeto, precio_sujeto, precio_sujeto_pos;
        n_precio_sujeto = Math.random();
        precio_sujeto_pos = Math.round((n_precio_sujeto * nuestro_slider.length));
        precio_sujeto = Number.parseInt(Math.round((nuestro_slider[precio_sujeto_pos] * 1000)));
        mensaje_precio_sujeto = `El precio seleccionado aleatoriamente es ${precio_sujeto}.`;
      Begin Routine:
        import random
        n_precio_sujeto=random.random()
        precio_sujeto_pos=round(n_precio_sujeto*len(nuestro_slider))
        precio_sujeto=int(round(nuestro_slider[precio_sujeto_pos]*1000))
        mensaje_precio_sujeto = f"El precio seleccionado aleatoriamente es {precio_sujeto}."
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $mensaje_precio_sujeto
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  Routine Pago1
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        var mensaje_precio_aleatorio, n_precio_aleatorio, precio_aleatorio;
        n_precio_aleatorio = Math.random();
        precio_aleatorio = Math.round((n_precio_aleatorio * 5000));
        mensaje_precio_aleatorio = `El número aleatorio es ${precio_aleatorio}.`;
      Begin Routine:
        import random
        n_precio_aleatorio = random.random()
        precio_aleatorio= round(n_precio_aleatorio*5000)
        mensaje_precio_aleatorio = f"El número aleatorio es {precio_aleatorio}."
    TextComponent text
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $mensaje_precio_aleatorio
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  Routine Final
  Routine Pago3
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        diferencia = (20000 - precio_sujeto);
        if ((precio_sujeto > precio_aleatorio)) {
            mensaje1 = `Usted ha ganado ${diferencia} pesos y el producto por el cuál subastó`;
        } else {
            mensaje1 = `Usted ha ganado 20.000 pesos`;
        }
      Begin Routine:
        diferencia=20000-precio_sujeto
        if precio_sujeto > precio_aleatorio:
           mensaje1 = f"Usted ha ganado {diferencia} pesos y el producto por el cuál subastó"
        else:
            mensaje1 = f"Usted ha ganado 20.000 pesos"
      End JS Routine:
        psychoJS.experiment.addData('mensaje', mensaje1)
    TextComponent texto_final
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $mensaje1
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  Routine subasta2
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Si la valoración que usted dio es MAYOR a la respuesta que genere la computadora, se le entregará el producto por el cuál realizó esa valoración y se le entregará el resultado de la resta de los 20.000 pesos y el valor del producto.

        Si la valoración que usted dio es MENOR a la respuesta que genere la computadora, se le entregarán los 20.000 pesos que tenía inicialmente.
  Routine subasta1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Ahora se realizará una subasta.

        Usted en este momento posee 20.000 pesos

        Esta subasta consiste en comparar una de las valoraciones que usted dio por uno de los artículos, escogida de forma aleatoria, con una respuesta generada aleatoriamente por la computadora!
  Routine Producto_2
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        imagen_estimulo = image_slider[precio_sujeto_pos];
      Begin Routine:
        imagen_estimulo= image_slider[precio_sujeto_pos]
      End JS Routine:
        psychoJS.experiment.addData('imagen', imagen_estimulo)
    ImageComponent image
      image [set every repeat] = $imagen_estimulo
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine slider
    CodeComponent code_4
      Code Type = Auto->JS
  Routine tipo
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        tipo=type(precio_sujeto_pos)
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $tipo
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Flow
  Routine Instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ruidos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Hertz', 400), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1500), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1000), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1000), ('volumen', 0.0)])]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = imagenes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Imagenes', 'Alpinito.jpg')]),
        OrderedDict([('Imagenes', 'Banano.jpeg')]),
        OrderedDict([('Imagenes', 'bon-bon-bun.jpg')]),
        OrderedDict([('Imagenes', 'Brownie.jpg')]),
        OrderedDict([('Imagenes', 'Chocoramo.jfif.jpg')]),
        OrderedDict([('Imagenes', 'Croissant.jpg')]),
        OrderedDict([('Imagenes', 'Galletas Tosh.jpg')]),
        OrderedDict([('Imagenes', 'Galletas-festival.jpg')]),
        OrderedDict([('Imagenes', 'Kiwi.jpg')]),
        OrderedDict([('Imagenes', 'Leche-de-almendras.jpg')]),
        OrderedDict([('Imagenes', 'Mango.jpeg')]),
        OrderedDict([('Imagenes', 'Manzana.jpg')]),
        OrderedDict([('Imagenes', 'Nutella (1).jpg')]),
        OrderedDict([('Imagenes', 'Papas-naturales.jpg')]),
        OrderedDict([('Imagenes', 'Papas-limon.jpg')]),
        OrderedDict([('Imagenes', 'Papas-pollo.jpg')]),
        OrderedDict([('Imagenes', 'Popetas.jpg')]),
        OrderedDict([('Imagenes', 'Rosquitas (1).jpg')]),
        OrderedDict([('Imagenes', 'Yogurt-alpina.jpg')]),
        OrderedDict([('Imagenes', 'Uvas.jpg')])]
      Routine grave
    LoopTerminator trials_2
  LoopTerminator trials
  Routine subasta1
  Routine subasta2
  Routine Pago1
  Routine Pago2
  Routine tipo
  Routine Producto_2
  Routine Pago3
