PsychoPy2experiment version="2020.2.5"
Settings
  Completed URL = https://www.youtube.com/
  Data filename = u'data/%s_%s_%s' % (expInfo['cedula'], expName, expInfo['date'])
  Experiment info = {'participant': 'INGRESE SU CEDULA AQUÍ'}
  Full-screen window = True
  Incomplete URL = https://www.youtube.com/
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = $[1,1,1]
  expName = piloto2
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Routines
  Routine Final
  Routine subasta2
    TextComponent text_subasta2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Si la valoración que usted dio es MAYOR a la respuesta que genere la computadora, se le entregará el producto por el cuál realizó esa valoración y se le entregará el resultado de la resta de los 20.000 pesos y el valor del producto.

        Si la valoración que usted dio es MENOR a la respuesta que genere la computadora, se le entregarán los 20.000 pesos que tenía inicialmente.
    PolygonComponent boton_subasta2
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_subasta2
      clickable = (boton_subasta2)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine subasta1
    TextComponent text_subasta1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Ahora realizará una subasta.

        Usted en este momento posee 20.000 pesos

        Esta subasta consiste en comparar una de las valoraciones que usted dio por uno de los artículos, escogida de forma aleatoria, con una respuesta generada aleatoriamente por la computadora.
    PolygonComponent boton_subasta1
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_subasta1
      clickable = (boton_subasta1)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine slider
    CodeComponent code_4
      Code Type = Auto->JS
  Routine tipo
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        tipo= type(precio_sujeto_pos)
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $tipo
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  Routine pago3
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        diferencia = (20000 - precio_sujeto);
        if ((precio_sujeto > precio_aleatorio)) {
            mensaje1 = `Usted ha ganado ${diferencia} pesos y el producto por el cuál subastó`;
        } else {
            mensaje1 = `Usted ha ganado 20.000 pesos`;
        }
      Begin Routine:
        diferencia=20000-precio_sujeto
        print(diferencia)
        if precio_sujeto > precio_aleatorio:
           mensaje1 = f"Usted ha ganado {diferencia} pesos y el producto por el cuál subastó"
        else:
            mensaje1 = f"Usted ha ganado 20.000 pesos"
      End JS Routine:
        psychoJS.experiment.addData('mensaje', mensaje1)
    TextComponent texto_final
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $mensaje1
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    PolygonComponent boton_pago3
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_pago3
      clickable = (boton_pago3)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine pago2
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        var mensaje_precio_sujeto, n_precio_sujeto, precio_sujeto, precio_sujeto_pos;
        n_precio_sujeto = Math.random();
        precio_sujeto_pos = Math.round((n_precio_sujeto * nuestro_slider.length));
        precio_sujeto = Number.parseInt(Math.round((nuestro_slider[precio_sujeto_pos] * 1000))-1000);
        mensaje_precio_sujeto = `El precio seleccionado aleatoriamente de sus respuestas es ${precio_sujeto}.`;
        imagen_estimulo= image_slider[precio_sujeto_pos]
      Begin Routine:
        import random
        n_precio_sujeto=random.random()
        precio_sujeto_pos=round(n_precio_sujeto*len(nuestro_slider))
        precio_sujeto=int(round((nuestro_slider[precio_sujeto_pos]*1000))-1000)
        mensaje_precio_sujeto = f"El precio seleccionado aleatoriamente de sus respuestas es {precio_sujeto}."
        imagen_estimulo= image_slider[precio_sujeto_pos]
      End JS Routine:
        psychoJS.experiment.addData('product', imagen_estimulo)
    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $mensaje_precio_sujeto
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    PolygonComponent boton_pago2
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_pago2
      clickable = (boton_pago2)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine pago1
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        var mensaje_precio_aleatorio, n_precio_aleatorio, precio_aleatorio;
        n_precio_aleatorio = Math.random();
        precio_aleatorio = Math.round((n_precio_aleatorio * 5000));
        mensaje_precio_aleatorio = `El número generado aleatoriamente por la computadora es ${precio_aleatorio}.`;
      Begin Routine:
        import random
        n_precio_aleatorio = random.random()
        precio_aleatorio= round(n_precio_aleatorio*5000)
        mensaje_precio_aleatorio = f"El número generado aleatoriamente por la computadora es {precio_aleatorio}."
    TextComponent text
      color = black
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $mensaje_precio_aleatorio
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    PolygonComponent boton_pago1
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_pago1
      clickable = (boton_pago1)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine intro
    TextComponent mensaje_intro
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Bienvenido al juego de subasta

        Oprima el botón rojo para avanzar.
    PolygonComponent boton_intro
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_intro
      clickable = (boton_intro)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine intro_2
    TextComponent mensaje_intro_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        A continuación, usted participará en un juego de diferentes subastas.
        Este juego dispondrá de múltiples subastas por diferentes productos, donde deberá indicar la suma de dinero que está dispuesto a pagar por ellos.
        • En cada subasta, usted será expuesto a un sonido durante 5 segundos mientras observa una pantalla gris.
        • Al cabo de este tiempo, se le mostrará una pantalla donde en la parte superior habrá un producto alimenticio y en la parte inferior una barra deslizadora que va desde cero hasta 5 mil pesos colombianos.
        • Para responder, usted debe mover el cursor sobre la barra hasta el valor deseado y hacer click.
        • Luego de esto, el sistema seguirá automáticamente a la siguiente ronda donde se repetirá el proceso con un bien distinto.
    PolygonComponent boton_intro_2
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_intro_2
      clickable = (boton_intro_2)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine experimento
    SoundComponent sonido_exp
      sound [set every repeat] = $Hertz
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      volume [set every repeat] = $volumen
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    ImageComponent image_exp
      image [set every repeat] = $Imagenes
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 25
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    SliderComponent slider_exp
      color = DimGrey
      forceEndRoutine = True
      granularity = 0
      labels = ("0","1000","2000","3000","4000","5000")
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 25
      styles = ('whiteOnBlack',)
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_exp
      Code Type = Both
      Begin Experiment:
        nuestro_slider=[]
        image_slider=[]
      Begin JS Experiment:
        nuestro_slider = [];
        image_slider = [];
      End JS Routine:
        rating = slider_exp.getRating();
        Imagenes1 = Imagenes;
        nuestro_slider.push(rating);
        image_slider.push(Imagenes1);
      End Routine:
        rating=slider_exp.getRating()
        Imagenes1=Imagenes
        nuestro_slider.append(rating)
        image_slider.append(Imagenes1)
  Routine intro_prueba
    TextComponent text_prueba
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = En este momento, realizará 2 rondas de prueba del juego, para que se familiarice con su apariencia y dinámica.
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    PolygonComponent boton_intro_prueba
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_intro_prueba
      clickable = (boton_intro_prueba)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine prueba_1
    SoundComponent sonido_prueba
      sound [set every repeat] = 800
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      volume [set every repeat] = 0.02
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    ImageComponent image_prueba
      image = imagenes/lapicero.jpg
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 25
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    SliderComponent slider_prueba
      color = DimGrey
      forceEndRoutine = True
      granularity = 0
      labels = ("0","1000","2000","3000","4000","5000")
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 25
      styles = ['whiteOnBlack']
      ticks = (1, 2, 3, 4, 5, 6)
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  Routine prueba_2
    SoundComponent sonido_prueba_2
      sound [set every repeat] = 800
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      volume [set every repeat] = 0.02
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    ImageComponent image_prueba_2
      image = imagenes/jabon.jpg
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 25
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    SliderComponent slider_prueba_2
      color = DimGrey
      forceEndRoutine = True
      granularity = 0
      labels = ("0","1000","2000","3000","4000","5000")
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 25
      styles = ['whiteOnBlack']
      ticks = (1, 2, 3, 4, 5, 6)
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  Routine producto
    TextComponent text_producto
      color = black
      letterHeight = 0.05
      pos = (0, 0.275)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = El producto sobre el cual se realizó la subasta es:
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    ImageComponent image
      image [set every repeat] = $imagen_estimulo
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent boton_producto
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_producto
      clickable = (boton_producto)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine intro_experimento
    TextComponent text_prueba_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Han acabado las rondas de entrenamiento.

        A continuación, empezarán las rondas del juego
    PolygonComponent boton_intro_exp
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_intro_exp
      clickable = (boton_intro_exp)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine encuesta
    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        import webbrowser
        webbrowser.open("https://www.youtube.com")
  Routine intro_encuesta
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Ha finalizado el juego de subasta.

        Le pediremos que de click en el botón rojo para acabar la sesión. A continuación aparecerá un mensaje "Thank you for your patience" seguido de un botón "Ok".

        Por favor, oprima el botón para ser redirigido a una encuesta que nos servirá en nuestro estudio.

        Muchas gracias por su participación en este juego.
    PolygonComponent boton_intro_encuesta
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_intro_encuesta
      clickable = (boton_intro_encuesta)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine text_pago
    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = El precio del bien seleccionado aleatoriamente, el precio que usted seleccionó, el producto seleccionado aleatoriamente y el pago que recibirá despues de descuentos se encuentra a continuación
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    PolygonComponent boton_pago1_2
      fillColor = $[1.0,-1,-1]
      lineColor = $[1.0,-1,-1]
      nVertices = 100
      pos = (0.7, -0.4)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_pago1_2
      clickable = (boton_pago1)
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine cedula
Flow
  Routine intro
  Routine intro_2
  Routine intro_prueba
  Routine prueba_1
  Routine prueba_2
  Routine intro_experimento
  Routine subasta1
  Routine subasta2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ruidos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Hertz', 400), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1500), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1000), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1000), ('volumen', 0.0)])]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = imagenes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Imagenes', 'Alpinito.jpg')]),
        OrderedDict([('Imagenes', 'Banano.jpeg')]),
        OrderedDict([('Imagenes', 'bon-bon-bun.jpg')]),
        OrderedDict([('Imagenes', 'Brownie.jpg')]),
        OrderedDict([('Imagenes', 'Chocoramo.jfif.jpg')]),
        OrderedDict([('Imagenes', 'Croissant.jpg')]),
        OrderedDict([('Imagenes', 'Galletas Tosh.jpg')]),
        OrderedDict([('Imagenes', 'Galletas-festival.jpg')]),
        OrderedDict([('Imagenes', 'Kiwi.jpg')]),
        OrderedDict([('Imagenes', 'Leche-de-almendras.jpg')]),
        OrderedDict([('Imagenes', 'Mango.jpeg')]),
        OrderedDict([('Imagenes', 'Manzana.jpg')]),
        OrderedDict([('Imagenes', 'Nutella (1).jpg')]),
        OrderedDict([('Imagenes', 'Papas-naturales.jpg')]),
        OrderedDict([('Imagenes', 'Papas-limon.jpg')]),
        OrderedDict([('Imagenes', 'Papas-pollo.jpg')]),
        OrderedDict([('Imagenes', 'Popetas.jpg')]),
        OrderedDict([('Imagenes', 'Rosquitas (1).jpg')]),
        OrderedDict([('Imagenes', 'Yogurt-alpina.jpg')]),
        OrderedDict([('Imagenes', 'Uvas.jpg')])]
      Routine experimento
    LoopTerminator trials_2
  LoopTerminator trials
  Routine text_pago
  Routine pago1
  Routine pago2
  Routine producto
  Routine pago3
  Routine intro_encuesta
